i:Ts/NumberOfThreads = 1
i:Ts/Seed = 271828
b:Ts/PauseBeforeQuit = "False"
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX = 20 cm
d:Ge/World/HLY = 20 cm
d:Ge/World/HLZ = 20 cm
s:Ge/Water/Parent = "World"
s:Ge/Water/Type = "TsBox"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX = 20 mm
d:Ge/Water/HLY = 20 mm
d:Ge/Water/HLZ = 50 mm
d:Ge/Water/TransZ = 50 mm
s:Ge/Source/Parent = "World"
s:Ge/Source/Type = "Group"
d:Ge/Source/TransZ = -0.001 mm
s:So/Smoke/Type = "Beam"
s:So/Smoke/Component = "Source"
s:So/Smoke/BeamParticle = "proton"
d:So/Smoke/BeamEnergy = 100 MeV
u:So/Smoke/BeamEnergySpread = 0
s:So/Smoke/BeamPositionDistribution = "None"
s:So/Smoke/BeamAngularDistribution = "None"
i:So/Smoke/NumberOfHistoriesInRun = 100
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 7 "g4em-standard_opt4" "g4h-phy_QGSP_BIC" "g4h-elastic" "g4stopping" "g4ion-binarycascade" "g4decay" "g4radioactivedecay"
d:Ph/Default/CutForAllParticles = 0.1 mm
s:Sc/edep/Quantity = "EnergyDeposit"
s:Sc/edep/Component = "Water"
i:Sc/edep/XBins = 1
i:Sc/edep/YBins = 1
i:Sc/edep/ZBins = 20
s:Sc/edep/OutputType = "csv"
s:Sc/edep/OutputFile = "edep"
s:Sc/edep/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/edep/Report = 2 "Sum" "Histories"
