# Native OpenTOPAS 4.3 input. Independent Monte Carlo evidence input; no validation claim.
i:Ts/NumberOfThreads = 1
# Ts/Seed is the PER-BATCH seed: fixed per committed seed-variant directory (batch statistics need >= 2 distinct seeds).
i:Ts/Seed = 20261004
b:Ts/PauseBeforeQuit = "False"

# Geometry: 120 x 120 x 300 mm G4_WATER box, entrance face at z = 0, beam axis = +z through the face centre.
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX = 20 cm
d:Ge/World/HLY = 20 cm
d:Ge/World/HLZ = 40 cm
s:Ge/Water/Parent = "World"
s:Ge/Water/Type = "TsBox"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX = 60 mm
d:Ge/Water/HLY = 60 mm
d:Ge/Water/HLZ = 150 mm
d:Ge/Water/TransZ = 150 mm
s:Ge/Source/Parent = "World"
s:Ge/Source/Type = "Group"
d:Ge/Source/TransZ = -0.001 mm

# Source: monoenergetic, zero-size, zero-divergence pencil beam along +z. BeamEnergy is the proton kinetic energy.
s:So/Beam/Type = "Beam"
s:So/Beam/Component = "Source"
s:So/Beam/BeamParticle = "proton"
d:So/Beam/BeamEnergy = 150 MeV
u:So/Beam/BeamEnergySpread = 0
s:So/Beam/BeamPositionDistribution = "None"
s:So/Beam/BeamAngularDistribution = "None"
i:So/Beam/NumberOfHistoriesInRun = 100000

# Physics (Geant4 modular) and production cuts
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 6 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4h-elastic_HP" "g4stopping" "g4ion-binarycascade" "g4decay"
d:Ph/Default/CutForAllParticles = 0.05 mm

s:Sc/IDD/Quantity = "DoseToMedium"
s:Sc/IDD/Component = "Water"
i:Sc/IDD/XBins = 1
i:Sc/IDD/YBins = 1
i:Sc/IDD/ZBins = 600
s:Sc/IDD/OutputType = "csv"
s:Sc/IDD/OutputFile = "idd_dose"
s:Sc/IDD/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/IDD/Report = 2 "Sum" "Standard_Deviation"

# Dose-averaged proton LET on the 0.5 mm depth column. Dose weighting is the TOPAS default (WeightBy);
# all other options are stated explicitly at their documented defaults.

s:Sc/LETd/Quantity = "ProtonLET"
s:Sc/LETd/Component = "Water"
i:Sc/LETd/XBins = 1
i:Sc/LETd/YBins = 1
i:Sc/LETd/ZBins = 600
s:Sc/LETd/WeightBy = "Dose"
d:Sc/LETd/MaxScoredLET = 100 MeV/mm/(g/cm3)
b:Sc/LETd/UsePreStepLookup = "False"
s:Sc/LETd/OutputType = "csv"
s:Sc/LETd/OutputFile = "let_d"
s:Sc/LETd/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/LETd/Report = 1 "Sum"
