# Native OpenTOPAS 4.3 input. V3-005C plan Amendment 14 (f) row 13 (noelastic, 150 MeV) for acceptance row X-elastic-factor: full minus g4h-elastic_HP (no hadronic elastic); no validation claim.
i:Ts/NumberOfThreads = 1
# Ts/Seed is the PER-BATCH seed: fixed per committed seed-variant directory (batch statistics need >= 2 distinct seeds).
i:Ts/Seed = 20283001
b:Ts/PauseBeforeQuit = "False"

# Geometry: 400 x 400 x 320 mm G4_WATER box, entrance face at z = 0, beam axis = +z through the face centre.
s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX = 25 cm
d:Ge/World/HLY = 25 cm
d:Ge/World/HLZ = 40 cm
s:Ge/Water/Parent = "World"
s:Ge/Water/Type = "TsBox"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX = 200 mm
d:Ge/Water/HLY = 200 mm
d:Ge/Water/HLZ = 160 mm
d:Ge/Water/TransZ = 160 mm
s:Ge/Source/Parent = "World"
s:Ge/Source/Type = "Group"
d:Ge/Source/TransZ = -0.001 mm

# Source: monoenergetic, zero-size, zero-divergence pencil beam along +z. BeamEnergy is the proton kinetic energy.
s:So/Beam/Type = "Beam"
s:So/Beam/Component = "Source"
s:So/Beam/BeamParticle = "proton"
d:So/Beam/BeamEnergy = 150 MeV
u:So/Beam/BeamEnergySpread = 0
s:So/Beam/BeamPositionDistribution = "None"
s:So/Beam/BeamAngularDistribution = "None"
i:So/Beam/NumberOfHistoriesInRun = 100000

# Physics (Geant4 modular) and production cuts
s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 5 "g4em-standard_opt4" "g4h-phy_QGSP_BIC_HP" "g4stopping" "g4ion-binarycascade" "g4decay"
d:Ph/Default/CutForAllParticles = 0.05 mm

# Integral depth dose: one lateral bin over the whole 400 x 400 mm box (r <= 200 mm is inside it), 0.5 mm depth bins.
s:Sc/IDD/Quantity = "DoseToMedium"
s:Sc/IDD/Component = "Water"
i:Sc/IDD/XBins = 1
i:Sc/IDD/YBins = 1
i:Sc/IDD/ZBins = 640
s:Sc/IDD/OutputType = "csv"
s:Sc/IDD/OutputFile = "idd_dose"
s:Sc/IDD/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/IDD/Report = 2 "Sum" "Standard_Deviation"
