# IonMC v2 calibration/reference case: 150 MeV protons in a 120 x 120 x 300 mm water box
i:Ts/NumberOfThreads = 1
i:Ts/Seed = 271828
b:Ts/PauseBeforeQuit = "False"
i:Ts/ShowHistoryCountAtInterval = 1000

s:Ge/World/Material = "Vacuum"
d:Ge/World/HLX = 20 cm
d:Ge/World/HLY = 20 cm
d:Ge/World/HLZ = 30 cm

s:Ge/Water/Parent = "World"
s:Ge/Water/Type = "TsBox"
s:Ge/Water/Material = "G4_WATER"
d:Ge/Water/HLX = 60 mm
d:Ge/Water/HLY = 60 mm
d:Ge/Water/HLZ = 150 mm
d:Ge/Water/TransZ = 150 mm
i:Ge/Water/XBins = 60
i:Ge/Water/YBins = 60
i:Ge/Water/ZBins = 150

s:Ge/Source/Parent = "World"
s:Ge/Source/Type = "Group"
d:Ge/Source/TransZ = -0.001 mm

s:So/Beam/Type = "Beam"
s:So/Beam/Component = "Source"
s:So/Beam/BeamParticle = "proton"
d:So/Beam/BeamEnergy = 150 MeV
u:So/Beam/BeamEnergySpread = 0
s:So/Beam/BeamPositionDistribution = "None"
s:So/Beam/BeamAngularDistribution = "None"
i:So/Beam/NumberOfHistoriesInRun = 10000

s:Ph/Default/Type = "Geant4_Modular"
sv:Ph/Default/Modules = 7 "g4em-standard_opt4" "g4h-phy_QGSP_BIC" "g4h-elastic" "g4stopping" "g4ion-binarycascade" "g4decay" "g4radioactivedecay"
d:Ph/Default/CutForAllParticles = 0.1 mm

s:Sc/dose/Quantity = "DoseToMedium"
s:Sc/dose/Component = "Water"
s:Sc/dose/OutputType = "binary"
s:Sc/dose/OutputFile = "dose"
s:Sc/dose/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/dose/Report = 2 "Sum" "Histories"
